graphs:
- id: DataRecorder
  nodes:
  - id: save
    module: timeflux.nodes.hdf5
    class: Save
    params:
      filename: sub-749_ses-EcogLfpMedOff01_task-RealtimeDecodingR_acq-StimOff_run-1_ieeg.hdf5
      path: C:\CODE\py_neuromodulation\realtime_experiment\data\sub-749\ses-EcogLfpMedOff01
      min_itemsize: null
  - id: raw_inlet
    module: timeflux.nodes.lsl
    class: Receive
    params:
      prop: source_id
      value: tmsi-0
      unit: ns
      sync: null
      channels: null
      max_samples: 10000
  - id: features_inlet
    module: timeflux.nodes.lsl
    class: Receive
    params:
      prop: source_id
      value: features_1
      unit: ns
      sync: null
      channels: null
      max_samples: 10000
  - id: prediction_inlet
    module: timeflux.nodes.lsl
    class: Receive
    params:
      prop: source_id
      value: decoding_1
      unit: ns
      sync: null
      channels: null
      max_samples: 10000
  edges:
  - source: raw_inlet
    target: save:rawdata
  - source: features_inlet
    target: save:features
  - source: prediction_inlet
    target: save:prediction
  rate: 1
- id: GUI
  nodes:
  - id: prediction_inlet
    module: timeflux.nodes.lsl
    class: Receive
    params:
      prop: source_id
      value: decoding_1
      unit: ns
      sync: null
  - id: feature_inlet
    module: timeflux.nodes.lsl
    class: Receive
    params:
      prop: source_id
      value: features_1
      unit: ns
      sync: null
  - id: ui
    module: timeflux_ui.nodes.ui
    class: UI
  edges:
  - source: prediction_inlet
    target: ui:MovementDecoding
  - source: feature_inlet
    target: ui:Features
  rate: 5
